[
    {
        "object.className": "ProtImportMovies",
        "object.id": "2",
        "object.label": "Import movies",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "~Movie's folder|%(SCIPION_TESTS)s/relion13_tutorial/betagal/Micrographs|2~",
        "filesPattern": "*.mrcs",
        "copyFiles": false,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 300.0,
        "sphericalAberration": 2.0,
        "amplitudeContrast": 0.1,
        "magnification": 50000,
        "samplingRateMode": 0,
        "samplingRate": 3.54,
        "scannedPixelSize": 7.0,
        "doseInitial": "~Initial dose|0.0|4~",
        "dosePerFrame": "~Dose per frame|0.0|4~",
        "gainFile": null,
        "darkFile": null,
        "dataStreaming": true,
        "timeout": 43200,
        "fileTimeout": 30,
        "inputIndividualFrames": false,
        "numberOfIndividualFrames": null,
        "stackFrames": false,
        "writeMoviesInProject": false,
        "movieSuffix": "_frames.mrcs",
        "deleteFrames": false,
        "streamingSocket": false,
        "socketPort": 5000
    },
    {
        "object.className": "XmippProtMovieGain",
        "object.id": "59",
        "object.label": "xmipp3 - movie gain",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "frameStep": 5,
        "movieStep": "~Gain estimation movie step|10|4~",
        "useExistingGainImage": false,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMovies": "2.outputMovies"
    },
    {
        "object.className": "XmippProtMovieCorr",
        "object.id": "114",
        "object.label": "xmipp3 - correlation alignment",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "alignFrame0": "~First frame to align|1|4~",
        "alignFrameN": "~Last frame to align|0|4~",
        "useAlignToSum": true,
        "sumFrame0": 1,
        "sumFrameN": 0,
        "binFactor": 1.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "doSaveAveMic": true,
        "doSaveMovie": false,
        "splineOrder": 1,
        "maxFreq": 4.0,
        "doComputePSD": true,
        "maxShift": 30,
        "outsideMode": 0,
        "outsideValue": 0.0,
        "hostName": "localhost",
        "numberOfThreads": 3,
        "numberOfMpi": 1,
        "inputMovies": "2.outputMovies"
    },
    {
        "object.className": "XmippProtCTFMicrographs",
        "object.id": "217",
        "object.label": "xmipp3 - ctf estimation",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "AutoDownsampling": true,
        "ctfDownFactor": 1.0,
        "doInitialCTF": false,
        "findPhaseShift": false,
        "doCTFAutoDownsampling": true,
        "lowRes": 0.05,
        "highRes": 0.35,
        "minDefocus": 0.25,
        "maxDefocus": 4.0,
        "windowSize": 512,
        "hostName": "localhost",
        "numberOfThreads": 2,
        "numberOfMpi": 1,
        "inputMicrographs": "114.outputMicrographs"
    },
    {
        "object.className": "SparxGaussianProtPicking",
        "object.id": "269",
        "object.label": "eman2 - sparx gaussian picker",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "bxSzFromCoor": false,
        "boxSize": "~Estimated particle size (px)|100|3~",
        "lowerThreshold": 1.0,
        "higherThreshold": 30.0,
        "gaussWidth": 1.0,
        "inputMicrographs": "114.outputMicrographs"
    },
    {
        "object.className": "XmippProtExtractParticles",
        "object.id": "312",
        "object.label": "xmipp3 - extract particles",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "downsampleType": 0,
        "downFactor": 1.0,
        "boxSize": 60,
        "doBorders": true,
        "doRemoveDust": true,
        "thresholdDust": 5.0,
        "doInvert": true,
        "doFlip": true,
        "doNormalize": true,
        "normType": 2,
        "backRadius": -1,
        "patchSize": -1,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "ctfRelations": "217.outputCTF",
        "inputCoordinates": "269.outputCoordinates"
    },
    {
        "object.className": "ProtRelionClassify2D",
        "object.id": "376",
        "object.label": "relion - 2D classification",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "isClassify": true,
        "is2D": true,
        "doContinue": false,
        "copyAlignment": false,
        "alignmentAsPriors": false,
        "fillRandomSubset": false,
        "maskDiameterA": -1,
        "continueIter": "last",
        "numberOfClasses": 16,
        "isMapAbsoluteGreyScale": false,
        "symmetryGroup": "c1",
        "initialLowPassFilterA": 60.0,
        "continueMsg": "True",
        "doCTF": true,
        "hasReferenceCTFCorrected": false,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 10.0,
        "numberOfIterations": 25,
        "regularisationParamT": 2,
        "doSubsets": false,
        "subsetSize": 10000,
        "subsetUpdates": 3,
        "maskZero": 0,
        "limitResolEStep": -1.0,
        "doImageAlignment": true,
        "inplaneAngularSamplingDeg": 5.0,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "useParallelDisk": true,
        "pooledParticles": 3,
        "allParticlesRam": false,
        "scratchDir": null,
        "combineItersDisc": false,
        "doGpu": true,
        "gpusToUse": "",
        "oversampling": 1,
        "extraParams": "",
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 3,
        "inputParticles": "312.outputParticles"
    }
]
